PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = DRM_HieuLe
  keyboardBackend = ioHub
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Routines
  Routine trial
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  Routine encoding
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    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $word
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  Routine blank
    RoutineSettingsComponent blank
      stopVal [duration (s)] = 1.0
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  Routine ready
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = You will now be moving onto the recognition stage
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  Routine recognition
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine blankk
    RoutineSettingsComponent blankk
      stopVal [duration (s)] = 3.0
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  Routine Welcome
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the DRM Experiment !

        Press the spacebar to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextComponent text_5
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will be presented with an initial set of words, and your objective is to memorize these words. Following that, additional words will be introduced, and your task is to distinguish between words you recall from the initial set. If a word is recognized from the original list, press the 'f' key; if it appears to be a new word, press the 'j' key.

        The task will repeat with a new set of words, follow the same instructions.

        Press the enter/return key when you have finished reading the instuctions.
    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Thank you for participating in the experiment.
        This window will close automatically.
  Routine delay
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine Welcome
  Routine instructions
  Routine blank
  LoopInitiator list_loop loopType="TrialHandler"
    conditionsFile = lists.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'encoding_list': 'encoding_list1.xlsx', 'recall_list': 'recall_list1.xlsx'},
      {'encoding_list': 'encoding_list2.xlsx', 'recall_list': 'recall_list2.xlsx'},
      {'encoding_list': 'encoding_list3.xlsx', 'recall_list': 'recall_list3.xlsx'},
      {'encoding_list': 'encoding_list4.xlsx', 'recall_list': 'recall_list4.xlsx'},
      {'encoding_list': 'encoding_list5.xlsx', 'recall_list': 'recall_list5.xlsx'},
      {'encoding_list': 'encoding_list6.xlsx', 'recall_list': 'recall_list6.xlsx'},
      {'encoding_list': 'encoding_list7.xlsx', 'recall_list': 'recall_list7.xlsx'},
      {'encoding_list': 'encoding_list8.xlsx', 'recall_list': 'recall_list8.xlsx'},
      {'encoding_list': 'encoding_list9.xlsx', 'recall_list': 'recall_list9.xlsx'},
      {'encoding_list': 'encoding_list10.xlsx', 'recall_list': 'recall_list10.xlsx'}]
    LoopInitiator encoding_loop loopType="TrialHandler"
      conditionsFile = $encoding_list
      loopType = random
      nReps = 1
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      Routine encoding
      Routine delay
    LoopTerminator encoding_loop
    Routine ready
    LoopInitiator recognition_loop loopType="TrialHandler"
      conditionsFile = $recall_list
      loopType = random
      nReps = 1
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      Routine recognition
    LoopTerminator recognition_loop
    Routine blankk
  LoopTerminator list_loop
  Routine goodbye
